PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'gender': '', 'R/B': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = image_repeat_task
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine image_presenation
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Ensure ImageFile is defined for the current trial
        if 'ImageFile' in thisTrial:
            ImageFile = thisTrial['ImageFile']  # Fetch image from conditions file
        else:
            ImageFile = None  # Fallback if not defined
        # Ensure ImageFile is updated for each trial
        ImageFile = thisTrial['ImageFile']
        print(f"Current trial image: {ImageFile}")
      Each Frame:
        # Automatically end the routine after a fixed time
        if t >= 1.5:  # Replace 2.0 with your desired display duration
            continueRoutine = False
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (0.8, 0.8)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $CorrectResponse
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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    TextComponent DistractorText
      color = 1.0000, -1.0000, -1.0000
      contrast = 0.5
      letterHeight = 0.03
      opacity [set every frame] = 0.5
      pos = (-0.68,0.3)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.05
      text = Hi there!
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  Routine blank_screen
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Set a timer for the blank screen duration
        blank_duration = 3.0
      Each Frame:
        # End the blank screen routine after 3 seconds
        if t >= blank_duration:
            continueRoutine = False
  Routine response
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type here!
      size = (0.5, 0.5)
      startVal [time (s)] = 7.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.0
      text = Did you notice anything other than the picture in the experiment? If yes enter what it was.  If you did not see anything, type no. After you type, press 'x' to exit from the experiment.
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  Routine Introduction
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this experiment, you will be shown a few images, whenever you see an image that has been repeated click the space bar. You need not press any key when the picture is not repeated.

        Press 'x' to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile': 'image1.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image2.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image3.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image4.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image5.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image6.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image7.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image8.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image9.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image10.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image11.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image12.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image13.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image14.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image15.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image16.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image17.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image18.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image19.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image20.jpg.JPG', 'CorrectResponse': None},
      {'ImageFile': 'image13.jpg.JPG', 'CorrectResponse': 'space'},
      {'ImageFile': 'image3.jpg.JPG', 'CorrectResponse': 'space'},
      {'ImageFile': 'image18.jpg.JPG', 'CorrectResponse': 'space'},
      {'ImageFile': 'image7.jpg.JPG', 'CorrectResponse': 'space'},
      {'ImageFile': 'image20.jpg.JPG', 'CorrectResponse': 'space'},
      {'ImageFile': 'image9.jpg.JPG', 'CorrectResponse': 'space'}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
    Routine image_presenation
    Routine blank_screen
  LoopTerminator trials
  Routine response
